PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine study
    PolygonComponent sample1
      fillColor = white
      shape = triangle
      size = (100, 100)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent sample2
      fillColor = white
      pos = (150, 0)
      shape = rectangle
      size = (100, 60)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent sample3
      fillColor = white
      pos = (300, 0)
      shape = cross
      size = (100, 100)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent sample4
      fillColor = white
      pos = (-150, 0)
      shape = star
      size = (100, 100)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent sample5
      fillColor = white
      pos = (-450, 0)
      shape = circle
      size = (100, 100)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent sample6
      fillColor = white
      nVertices = 6
      pos = (-300, 0)
      shape = regular polygon...
      size = (100, 100)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press 'space' to begin the experiment.
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  Routine routine_2
    PolygonComponent R2sample
      fillColor = white
      shape = triangle
      size = (50, 100)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent R2sample2
      fillColor = white
      pos = (100, 0)
      shape = cross
      size = (50, 100)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent R2sample3
      fillColor = white
      pos = (-100, 0)
      shape = arrow
      size = (50, 100)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent R2sample4
      fillColor = white
      pos = (-200, 0)
      shape = circle
      size = (50, 100)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent answer2
      allowedKeys = 's', 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent R2text
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Press 's' if shapes are the same and 'n' if shapes are not the same
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  Routine routine_1
    PolygonComponent R1sample
      fillColor = white
      pos = (-50, 0)
      shape = triangle
      size = (50, 100)
      startVal [time (s)] = 0
      units = pix
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    PolygonComponent R1sample2
      fillColor = white
      pos = (-175, 0)
      shape = rectangle
      size = (100, 60)
      startVal [time (s)] = 0
      units = pix
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    PolygonComponent R1sample3
      fillColor = white
      pos = (50, 0)
      shape = circle
      size = (50, 100)
      startVal [time (s)] = 0
      units = pix
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    PolygonComponent R1sample4
      fillColor = white
      pos = (150, 0)
      shape = star
      size = (50, 100)
      startVal [time (s)] = 0
      units = pix
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    KeyboardComponent answer
      allowedKeys = 's', 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent R1text
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Press 's' if shapes are the same and 'n' if shapes are not the same
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  Routine routine_6
    PolygonComponent R6sample
      fillColor = white
      shape = triangle
      size = (50, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    PolygonComponent R6sample2
      fillColor = white
      nVertices = 5
      pos = (125, 0)
      shape = regular polygon...
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    PolygonComponent R6sample3
      fillColor = white
      pos = (-100, 0)
      shape = star
      size = (50, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    PolygonComponent R6sample4
      fillColor = white
      pos = (-200, 0)
      shape = circle
      size = (50, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    KeyboardComponent answer6
      allowedKeys = 's', 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent R6text
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Press 's' if shapes are the same and 'n' if shapes are not the same
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  Routine routine_5
    PolygonComponent R5sample
      fillColor = white
      shape = triangle
      size = (50, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    PolygonComponent R5sample2
      fillColor = white
      pos = (100, 0)
      shape = cross
      size = (50, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    PolygonComponent R5sample3
      fillColor = white
      nVertices = 7
      pos = (-100, 0)
      shape = regular polygon...
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    PolygonComponent R5sample4
      fillColor = white
      pos = (-200, 0)
      shape = circle
      size = (50, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    KeyboardComponent answer5
      allowedKeys = 's', 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent R5text
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Press 's' if shapes are the same and 'n' if shapes are not the same
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  Routine routine_3
    PolygonComponent R3sample
      fillColor = white
      shape = triangle
      size = (100, 100)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent R3sample2
      fillColor = white
      pos = (150, 0)
      shape = rectangle
      size = (100, 60)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent R3sample3
      fillColor = white
      pos = (300, 0)
      shape = cross
      size = (100, 100)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent R3sample4
      fillColor = white
      nVertices = 6
      pos = (-150, 0)
      shape = regular polygon...
      size = (100, 100)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent answer3
      allowedKeys = 's', 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent R3text
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Press 's' if shapes are the same and 'n' if shapes are not the same
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  Routine routine_4
    PolygonComponent R4sample
      fillColor = white
      shape = triangle
      size = (100, 100)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent R4sample2
      fillColor = white
      pos = (150, 0)
      shape = rectangle
      size = (100, 60)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent R4sample3
      fillColor = white
      pos = (300, 0)
      shape = cross
      size = (100, 100)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent R4sample4
      fillColor = white
      pos = (-150, 0)
      shape = star
      size = (100, 100)
      startVal [time (s)] = 0
      units = pix
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    KeyboardComponent answer4
      allowedKeys = 's', 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent R4text
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Press 's' if shapes are the same and 'n' if shapes are not the same
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  Routine Information
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 900
      text = Please repeat the experiment once 15 minutes have passed
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  Routine Instruction
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will be shown 6 shapes on the screen out of which 4 will be randomly displayed 30 times(trials). You are supposed to identify if all the shapes during the trial are the same as the stimuli or not. Press 's' if you think it is the same and press 'n' if you think it is new.  An information screen will be displayed once you finish the experiment for the first time which will disappear once 15 minutes have passed. This experiment is to be performed again after that. Press 'space' to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instruction
  Routine study
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine routine_1
    Routine routine_2
    Routine routine_3
    Routine routine_4
    Routine routine_5
    Routine routine_6
  LoopTerminator trials
  Routine Information
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine routine_2
    Routine routine_5
    Routine routine_1
    Routine routine_4
    Routine routine_6
    Routine routine_3
  LoopTerminator trials_2
