PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days" 
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Keval/OneDrive/Desktop/discounting.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 15},
      {'reward_today': 27, 'future_reward': 50, 'delay': 16},
      {'reward_today': 40, 'future_reward': 55, 'delay': 20},
      {'reward_today': 45, 'future_reward': 59, 'delay': 20},
      {'reward_today': 49, 'future_reward': 60, 'delay': 25},
      {'reward_today': 67, 'future_reward': 75, 'delay': 33},
      {'reward_today': 78, 'future_reward': 80, 'delay': 35},
      {'reward_today': 89, 'future_reward': 86, 'delay': 36},
      {'reward_today': 97, 'future_reward': 105, 'delay': 37},
      {'reward_today': 105, 'future_reward': 104, 'delay': 46},
      {'reward_today': 110, 'future_reward': 112.466666666667, 'delay': 50},
      {'reward_today': 115, 'future_reward': 120, 'delay': 53},
      {'reward_today': 119, 'future_reward': 127.533333333333, 'delay': 60},
      {'reward_today': 125, 'future_reward': 135, 'delay': 62},
      {'reward_today': 134, 'future_reward': 142.6, 'delay': 71},
      {'reward_today': 137, 'future_reward': 150.133333333333, 'delay': 77},
      {'reward_today': 141, 'future_reward': 157.666666666667, 'delay': 78},
      {'reward_today': 145, 'future_reward': 165.2, 'delay': 85},
      {'reward_today': 149, 'future_reward': 172.733333333333, 'delay': 90},
      {'reward_today': 156, 'future_reward': 180.266666666667, 'delay': 96},
      {'reward_today': 167, 'future_reward': 187.8, 'delay': 103},
      {'reward_today': 170, 'future_reward': 195.333333333333, 'delay': 109},
      {'reward_today': 173, 'future_reward': 202.866666666667, 'delay': 114},
      {'reward_today': 175, 'future_reward': 210.4, 'delay': 115}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
    Routine trial
  LoopTerminator trials
